open("C:/Users/WarrenKincaid/git/notebook_wk_hanlab/ImageJProcessing/Gly_PVA_Images/03_04_24_trial1/AutoProc/T0001_5min_trhd-im_no-ws_grey.tif");
setAutoThreshold("Default no-reset");
//run("Threshold...");
//setThreshold(1, 128);
setOption("BlackBackground", true);
run("Convert to Mask");
run("Close");
run("Set Scale...", "distance=2.425 known=1 unit=µm");
run("Set Measurements...", "area mean standard perimeter shape feret's display redirect=None decimal=3");
run("Analyze Particles...", "size=10.00-Infinity show=Outlines display exclude summarize");
saveAs("Results", "C:/Users/WarrenKincaid/git/notebook_wk_hanlab/ImageJProcessing/Gly_PVA_Images/03_04_24_trial1/AutoProc/Summary_5min_trial1.csv");
saveAs("Tiff", "C:/Users/WarrenKincaid/git/notebook_wk_hanlab/ImageJProcessing/Gly_PVA_Images/03_04_24_trial1/AutoProc/Drawing of T0001_5min_trhd-im_no-ws_grey.tif");
close;
saveAs("Results", "C:/Users/WarrenKincaid/git/notebook_wk_hanlab/ImageJProcessing/Gly_PVA_Images/03_04_24_trial1/AutoProc/Results_5min_trial1.csv");
selectImage("T0001_5min_trhd-im_no-ws_grey.tif");
saveAs("Tiff", "C:/Users/WarrenKincaid/git/notebook_wk_hanlab/ImageJProcessing/Gly_PVA_Images/03_04_24_trial1/AutoProc/T0001_5min_trhd-im_no-ws_grey_analyzed.tif");
run("Distribution...", "parameter=Area automatic");
saveAs("Tiff", "C:/Users/WarrenKincaid/git/notebook_wk_hanlab/ImageJProcessing/Gly_PVA_Images/03_04_24_trial1/AutoProc/AreaDistribution_5min_trial1.tif");
saveAs("Results", "C:/Users/WarrenKincaid/git/notebook_wk_hanlab/ImageJProcessing/Gly_PVA_Images/03_04_24_trial1/AutoProc/AreaDistribution_5min_trial1_list.csv");
